<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Buzzer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" DisplayName="Repeats" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="pin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="frequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>500</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="duration" Description="Duration in seconds" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:seconds_to_milliseconds" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:serial_transform" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWrite">
                <port:PortName>StimCommand</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="StimInterval" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>3</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>StimCommand</port:Name>
                <port:PortName>COM3</port:PortName>
                <port:BaudRate>115200</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="17" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>