<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Width" />
              <Property Name="Height" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetupScreen</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Width" />
                    <Property Name="Height" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateWindow">
                      <gl:Width>1920</gl:Width>
                      <gl:Height>1080</gl:Height>
                      <gl:VSync>Adaptive</gl:VSync>
                      <gl:SwapSync>false</gl:SwapSync>
                      <gl:ClearColor>Black</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:CursorVisible>true</gl:CursorVisible>
                      <gl:Location xsi:nil="true" />
                      <gl:WindowBorder>Resizable</gl:WindowBorder>
                      <gl:WindowState>Normal</gl:WindowState>
                      <gl:DisplayDevice>Second</gl:DisplayDevice>
                      <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
                      <gl:TargetUpdateFrequency xsi:nil="true" />
                      <gl:RenderState />
                      <gl:GraphicsMode>
                        <gl:ColorFormat>
                          <gl:Red>8</gl:Red>
                          <gl:Green>8</gl:Green>
                          <gl:Blue>8</gl:Blue>
                          <gl:Alpha>8</gl:Alpha>
                        </gl:ColorFormat>
                        <gl:Depth>16</gl:Depth>
                        <gl:Stencil>0</gl:Stencil>
                        <gl:Samples>0</gl:Samples>
                        <gl:AccumulatorFormat>
                          <gl:Red>0</gl:Red>
                          <gl:Green>0</gl:Green>
                          <gl:Blue>0</gl:Blue>
                          <gl:Alpha>0</gl:Alpha>
                        </gl:AccumulatorFormat>
                        <gl:Buffers>2</gl:Buffers>
                        <gl:Stereo>false</gl:Stereo>
                      </gl:GraphicsMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="res:LoadResources" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Screen</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="StimLength" />
              <Property Name="Frequency" />
              <Property Name="StimInterval" />
              <Property Name="StimRepeats" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="Time Before Onset" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT10S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>StimulusGenerator</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Frequency" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TemporalFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Screen</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>2</ExtentX>
                    <ExtentY>2</ExtentY>
                    <SpatialFrequency>0</SpatialFrequency>
                    <TemporalFrequency>3</TemporalFrequency>
                    <Phase>0</Phase>
                    <Angle>0</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>-5</Aperture>
                    <Opacity>1</Opacity>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="StimLength" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="TimeSpanProperty">
                      <Value>PT10S</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Period" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT10S</rx:DueTime>
                      <rx:Period>PT10S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="StimInterval" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT10S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" DisplayName="StimRepeats" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>3</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="rx:ToDictionary">
                    <rx:ElementSelector>Value,Timestamp.Millisecond</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>test.csv</io:FileName>
                    <io:Append>true</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="14" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>