<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
        <Property Name="BaudRate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>COM3</port:Name>
          <port:PortName>COM3</port:PortName>
          <port:BaudRate>115200</port:BaudRate>
          <port:Encoding>utf-8</port:Encoding>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="NewLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>COM3</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT6S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>22</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ByteProperty">
          <Value>22</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM3</port:PortName>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>